PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word priming experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Click to submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = word priming experiment.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = word priming exp. 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_h_o_n'},
      {'test': '_ia_n_'},
      {'test': '_ea_o_'},
      {'test': 'c_m_r_'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'}]
    Routine test
  LoopTerminator trials_2
